PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = Probabilistic Reward Learning
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine Instructions
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions:

        There are two blocks of questions - One has different shapes and one block has just the colors.

        you will see two options. You just need to pick one each trial.

        Press '1' to choose the first option and '2' to choose the second option.

        Some are more likely to win points! There is no right or wrong answer on a single trial - outcomes are probabilistic.

        Your goal is to learn through experience which choices work better and earn as many points as you can.

        Have fun!

        Press 'space' key to begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Variable_Initialization
      Code Type = Py
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      Begin Experiment:
        import random

        # Shapes (only used in Block 1)
        SHAPES_POOL = ["♥", "♠", "♦", "♣"]
        COLORS_POOL = ["red", "black"]

        # Reward setup for each block
        dominant_color_block1 = random.choice(COLORS_POOL)
        dominant_color_block2 = "red" if dominant_color_block1 == "black" else "black"

        # Probabilities for each block
        P_REWARD_block1 = {"red": 0.75, "black": 0.25} if dominant_color_block1 == "red" else {"red": 0.25, "black": 0.75}
        P_REWARD_block2 = {"red": 0.75, "black": 0.25} if dominant_color_block2 == "red" else {"red": 0.25, "black": 0.75}

        # Initialize block-specific variables
        total_points_block1 = 0
        obs_trials_by_color1 = {"red":0, "black":0}
        obs_wins_by_color1 = {"red":0, "black":0}
        running_p_hat1 = {"red":None, "black":None}

        total_points_block2 = 0
        obs_trials_by_color2 = {"red":0, "black":0}
        obs_wins_by_color2 = {"red":0, "black":0}
        running_p_hat2 = {"red":None, "black":None}

        # Randomize order of blocks
        block_order = ["with_shapes", "without_shapes"]
        random.shuffle(block_order)
        current_block_index = 0
  Routine Choice
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    TextComponent leftStim
      color = red
      letterHeight = 0.10
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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      text:
        2
    TextComponent rightStim
      color = black
      letterHeight = 0.1
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      text = ♦ 
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    KeyboardComponent choiceKeys
      allowedKeys = '1', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent display
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = press '1' or '2' 
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    CodeComponent Randomized_Options
      Code Type = Py
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      Begin Routine:
        # === Begin Routine: Choice Trial ===
        import random

        # Identify which block we are in
        current_block = block_order[current_block_index]

        # Assign correct variables based on the block
        if current_block == "with_shapes":
            use_shapes = True
            P_REWARD = P_REWARD_block1
            total_points = total_points_block1        # read-only, no global needed here
            obs_trials_by_color = obs_trials_by_color1
            obs_wins_by_color = obs_wins_by_color1
            running_p_hat = running_p_hat1
        else:
            use_shapes = False
            P_REWARD = P_REWARD_block2
            total_points = total_points_block2
            obs_trials_by_color = obs_trials_by_color2
            obs_wins_by_color = obs_wins_by_color2
            running_p_hat = running_p_hat2

        # Assign shapes/colors
        if use_shapes:
            left_shape, right_shape = random.choices(SHAPES_POOL, k=2)
        else:
            left_shape, right_shape = "■", "■"  # placeholder for block without shapes

        # Pick two distinct colors
        left_color, right_color = random.sample(COLORS_POOL, 2)

        # Update PsychoPy text stimuli
        leftStim.setText(left_shape)
        leftStim.setColor(left_color, colorSpace='named')
        rightStim.setText(right_shape)
        rightStim.setColor(right_color, colorSpace='named')

        # Clear per-trial state variables
        chosen_side = None
        chosen_color = None
        chosen_shape = None
        reward_points = 0
        p_used = None
      End Routine:
        # At the very top
        total_points_block1, total_points_block2
        obs_trials_by_color1, obs_wins_by_color1, running_p_hat1
        obs_trials_by_color2, obs_wins_by_color2, running_p_hat2


        # Normalize key
        key_pressed = choiceKeys.keys
        if isinstance(key_pressed, list) and key_pressed:
            key_pressed = key_pressed[-1]
        if key_pressed in ("num_1", 1): key_pressed = "1"
        if key_pressed in ("num_2", 2): key_pressed = "2"

        # Map to chosen stimulus/color
        if key_pressed == "1":
            chosen_side = "left"
            chosen_color = left_color
            chosen_shape = left_shape
        elif key_pressed == "2":
            chosen_side = "right"
            chosen_color = right_color
            chosen_shape = right_shape
        else:
            chosen_side = None
            chosen_color = None

        # Normalize color
        if isinstance(chosen_color, str):
            chosen_color = chosen_color.strip().lower()

        # Determine reward
        if chosen_color in COLORS_POOL:
            p_used = P_REWARD[chosen_color]
            reward_points = int(random.random() < p_used)
        else:
            p_used = None

        # Update total points for current block
        if current_block == "with_shapes":
            total_points_block1 += reward_points
        elif current_block == "without_shapes":
            total_points_block2 += reward_points

        last_trial_points = reward_points


        # Update per-color stats
        if chosen_color in COLORS_POOL:
            obs_trials_by_color[chosen_color] += 1
            if reward_points > 0:
                obs_wins_by_color[chosen_color] += 1
            t = obs_trials_by_color[chosen_color]
            w = obs_wins_by_color[chosen_color]
            running_p_hat[chosen_color] = w/t if t>0 else None

        # Log data
        thisExp.addData("block_condition", current_block)
        thisExp.addData("session_dominant_color", P_REWARD)
        thisExp.addData("key_pressed", key_pressed)
        thisExp.addData("left_color", left_color)
        thisExp.addData("left_shape", left_shape)
        thisExp.addData("right_color", right_color)
        thisExp.addData("right_shape", right_shape)
        thisExp.addData("chosen_side", chosen_side)
        thisExp.addData("chosen_shape", chosen_shape)
        thisExp.addData("chosen_color", chosen_color)
        thisExp.addData("p_used", p_used)
        thisExp.addData("trial_reward", reward_points)
        thisExp.addData("obs_trials_red", obs_trials_by_color["red"])
        thisExp.addData("obs_wins_red", obs_wins_by_color["red"])
        thisExp.addData("obs_p_red", running_p_hat["red"])
        thisExp.addData("obs_trials_black", obs_trials_by_color["black"])
        thisExp.addData("obs_wins_black", obs_wins_by_color["black"])
        thisExp.addData("obs_p_black", running_p_hat["black"])
        thisExp.addData("total_points_block1", total_points_block1)
        thisExp.addData("total_points_block2", total_points_block2)
        thisExp.addData("dominant_color_block1", dominant_color_block1)
        thisExp.addData("dominant_color_block2", dominant_color_block2)
  Routine Feedback
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    TextComponent fbText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        1 point !
    CodeComponent Points_Calculation
      Code Type = Py
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      Begin Routine:
        # Display last trial’s result and running total
        if last_trial_points == 1:
            fbText.setText(f"Yay! You win {last_trial_points} point this trial\nTotal points: {total_points_block1 if current_block=='with_shapes' else total_points_block2}")
        else:
            fbText.setText(f"Oops! No points this trial\nTotal points: {total_points_block1 if current_block=='with_shapes' else total_points_block2}")
  Routine Space
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    TextComponent sptext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        +
  Routine Thank_you
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your time!

        Press 'q' to quit the task
    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start_1
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is Block 1

        Press space to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start_2
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is Block 2

        Press space to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Variable_Initialization_2
      Code Type = Py
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      End Routine:
        current_block_index += 1
Flow
  Routine Instructions
  Routine Start_1
  LoopInitiator block1_loop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine Choice
    Routine Feedback
    Routine Space
  LoopTerminator block1_loop
  Routine Start_2
  LoopInitiator block2_loop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine Choice
    Routine Feedback
    Routine Space
  LoopTerminator block2_loop
  Routine Thank_you
